PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = WordPrimingExperiment
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent StudySlider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = StudyWords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'book'},
      {'Study_word': 'cushion'},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'},
      {'Study_word': 'Laptop'},
      {'Study_word': 'Chart'},
      {'Study_word': 'T-shirt'},
      {'Study_word': 'mouse'},
      {'Study_word': 'Pastry'},
      {'Study_word': 'Case'},
      {'Study_word': 'Cruise'},
      {'Study_word': 'Police'},
      {'Study_word': 'Keys'},
      {'Study_word': 'Poster'},
      {'Study_word': 'Parrot'},
      {'Study_word': 'Paradise '},
      {'Study_word': 'bookshelf'},
      {'Study_word': 'Enchantment '},
      {'Study_word': 'stone'},
      {'Study_word': 'pepper'},
      {'Study_word': 'storm'},
      {'Study_word': 'light'},
      {'Study_word': 'Gaslight'},
      {'Study_word': 'Manipulate'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = TestWords.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'Reference': 'laptop', 'Primed_NonPrimed': 'Primed'},
      {'test_word': '_h_rt', 'Reference': 'chart', 'Primed_NonPrimed': 'Primed'},
      {'test_word': 'T_hi_t', 'Reference': 'Tshirt', 'Primed_NonPrimed': 'Primed'},
      {'test_word': '_o_se', 'Reference': 'mouse', 'Primed_NonPrimed': 'Primed'},
      {'test_word': 'P_st_y', 'Reference': 'Pastry', 'Primed_NonPrimed': 'Primed'},
      {'test_word': 'c_s_', 'Reference': 'case', 'Primed_NonPrimed': 'Primed'},
      {'test_word': '_ru_se', 'Reference': 'Cruise', 'Primed_NonPrimed': 'Primed'},
      {'test_word': 'P_l_c_', 'Reference': 'Police', 'Primed_NonPrimed': 'Primed'},
      {'test_word': 'K_y_', 'Reference': 'Keys', 'Primed_NonPrimed': 'Primed'},
      {'test_word': 'P_st_r', 'Reference': 'Poster', 'Primed_NonPrimed': 'Primed'},
      {'test_word': '_o_rd', 'Reference': 'board', 'Primed_NonPrimed': 'Primed'},
      {'test_word': '_a_bl_', 'Reference': 'marble', 'Primed_NonPrimed': 'Primed'},
      {'test_word': '_ho_e', 'Reference': 'Phone', 'Primed_NonPrimed': 'Primed'},
      {'test_word': '_oo_', 'Reference': 'book', 'Primed_NonPrimed': 'Primed'},
      {'test_word': 'c_s_io_', 'Reference': 'cushion', 'Primed_NonPrimed': 'Primed'},
      {'test_word': 't_b_e', 'Reference': 'table', 'Primed_NonPrimed': 'NonPrimed'},
      {'test_word': 'p_nc_l', 'Reference': 'pencil', 'Primed_NonPrimed': 'NonPrimed'},
      {'test_word': 'v_s_', 'Reference': 'vase', 'Primed_NonPrimed': 'NonPrimed'},
      {'test_word': 'bo_t_e', 'Reference': 'bottle', 'Primed_NonPrimed': 'NonPrimed'}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
    Routine test
  LoopTerminator trials_2
