PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = MindWanderingExperiment_SoloProject
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine ins
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    TextComponent ttt
      letterHeight = 0.05
      startVal [time (s)] = 0.1
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      text:
        Welcome to the experiment!
        In this task, shapes (triangle and square) will appear on the screen in a random manner. Your task is to identify the target shape (for example, out of many triangles their will be a square and vise versa).
        Press 's' key if target is a Square. Press 't' key if target is a Triangle.
        Respond as fast and as accurately as possible. If you make a mistake, you can still continue with experiment.
        If at any momemt, you wish to quit, press 'Esc' key.

        When you are ready, press the 'space' bar to begin with the experiment.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    PolygonComponent target
      fillColor [set every repeat] = $TargetColour
      pos [set every repeat] = TargetPosition
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = TargetVertices
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    PolygonComponent Distractor1
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = DistractorPosition
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor2
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor2Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor3
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor3Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor4
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor4Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor5
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor5Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor6
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor6Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor7
      fillColor [set every repeat] = $Distractor7Colour
      pos [set every repeat] = Distractor7Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    KeyboardComponent Response
      allowedKeys [set every repeat] = CorrResp
      forceEndRoutine = True
      startVal [time (s)] = 0.3
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  Routine Trial2
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    PolygonComponent target_2
      fillColor [set every repeat] = $TargetColour
      pos [set every repeat] = TargetPosition
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = TargetVertices
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    PolygonComponent Distractor1_2
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = DistractorPosition
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor2_2
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor2Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor3_2
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor3Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor4_2
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor4Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor5_2
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor5Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor6_2
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor6Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    PolygonComponent Distractor7_2
      fillColor [set every repeat] = $DistractorColour
      pos [set every repeat] = Distractor7Pos
      shape = custom polygon...
      size = (0.4, 0.4)
      startVal [time (s)] = 0.3
      vertices [set every repeat] = DistractorVertices
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    KeyboardComponent Response_2
      allowedKeys [set every repeat] = CorrResp
      forceEndRoutine = True
      startVal [time (s)] = 0.3
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine ins
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ShapesPostion_Copy.xlsx
    loopType = random
    nReps = 50
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    conditions:
      [{'TargetShape': 'triangle', 'TargetVertices': [[-0.05, -0.05], [0.05, -0.05], [0, 0.05]], 'TargetColour': 'red', 'DistractorShape': 'square', 'DistractorVertices': [[-0.05, -0.05], [0.05, -0.05], [0.05, 0.05], [-0.05, 0.05]], 'DistractorColour': 'red', 'TargetPosition': (-0.05, 0.05), 'DistractorPosition': [(-0.09, 0.06)], 'Distractor2Pos': [(0.05, 0.05)], 'Distractor3Pos': [(-0.09, -0.09)], 'Distractor4Pos': [(0.01, -0.01)], 'Distractor5Pos': [(0.04, -0.04)], 'Distractor6Pos': [(0.03, 0.03)], 'Distractor7Pos': [(-0.08, -0.08)], 'Distractor7Colour': 'green', 'CorrResp': 't'},
      {'TargetShape': 'square', 'TargetVertices': [[-0.05, -0.05], [0.05, -0.05], [0.05, 0.05], [-0.05, 0.05]], 'TargetColour': 'green', 'DistractorShape': 'triangle', 'DistractorVertices': [[-0.05, -0.05], [0.05, -0.05], [0, 0.05]], 'DistractorColour': 'green', 'TargetPosition': (0.05, 0.5), 'DistractorPosition': [(0.08, 0.09)], 'Distractor2Pos': [(0.04, -0.04)], 'Distractor3Pos': [(-0.07, 0.02)], 'Distractor4Pos': [(0.01, -0.01)], 'Distractor5Pos': [(-0.06, -0.08)], 'Distractor6Pos': [(-0.03, -0.03)], 'Distractor7Pos': [(-0.09, 0.09)], 'Distractor7Colour': 'red', 'CorrResp': 's'},
      {'TargetShape': 'triangle', 'TargetVertices': [[-0.05, -0.05], [0.05, -0.05], [0, 0.05]], 'TargetColour': 'green', 'DistractorShape': 'square', 'DistractorVertices': [[-0.05, -0.05], [0.05, -0.05], [0.05, 0.05], [-0.05, 0.05]], 'DistractorColour': 'green', 'TargetPosition': (0, -0.07), 'DistractorPosition': [(-0.7, 0.08)], 'Distractor2Pos': [(-0.09, -0.09)], 'Distractor3Pos': [(0.04, -0.04)], 'Distractor4Pos': [(0.06, 0.05)], 'Distractor5Pos': [(-0.01, 0.01)], 'Distractor6Pos': [(-0.06, 0.06)], 'Distractor7Pos': [(-0.03, -0.03)], 'Distractor7Colour': 'red', 'CorrResp': 't'},
      {'TargetShape': 'square', 'TargetVertices': [[-0.05, -0.05], [0.05, -0.05], [0.05, 0.05], [-0.05, 0.05]], 'TargetColour': 'red', 'DistractorShape': 'triangle', 'DistractorVertices': [[-0.05, -0.05], [0.05, -0.05], [0, 0.05]], 'DistractorColour': 'red', 'TargetPosition': (0.07, 0.07), 'DistractorPosition': [(0.08, 0.08)], 'Distractor2Pos': [(-0.04, 0)], 'Distractor3Pos': [(0.08, -0.02)], 'Distractor4Pos': [(-0.06, -0.06)], 'Distractor5Pos': [(-0.01, -0.01)], 'Distractor6Pos': [(0.03, -0.03)], 'Distractor7Pos': [(-0.09, 0.09)], 'Distractor7Colour': 'green', 'CorrResp': 's'}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
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = ShapePosition.xlsx
    loopType = random
    nReps = 50
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    conditions:
      [{'TargetShape': 'triangle', 'TargetVertices': [[-0.05, -0.05], [0.05, -0.05], [0, 0.05]], 'TargetColour': 'red', 'DistractorShape': 'square', 'DistractorVertices': [[-0.05, -0.05], [0.05, -0.05], [0.05, 0.05], [-0.05, 0.05]], 'DistractorColour': 'red', 'TargetPosition': (-0.05, 0.05), 'DistractorPosition': [(-0.09, 0.06)], 'Distractor2Pos': [(0.05, 0.05)], 'Distractor3Pos': [(-0.09, -0.09)], 'Distractor4Pos': [(0.01, -0.01)], 'Distractor5Pos': [(0.04, -0.04)], 'Distractor6Pos': [(0.03, 0.03)], 'Distractor7Pos': [(-0.08, -0.08)], 'CorrResp': 't'},
      {'TargetShape': 'square', 'TargetVertices': [[-0.05, -0.05], [0.05, -0.05], [0.05, 0.05], [-0.05, 0.05]], 'TargetColour': 'green', 'DistractorShape': 'triangle', 'DistractorVertices': [[-0.05, -0.05], [0.05, -0.05], [0, 0.05]], 'DistractorColour': 'green', 'TargetPosition': (0.05, 0.5), 'DistractorPosition': [(0.08, 0.09)], 'Distractor2Pos': [(0.04, -0.04)], 'Distractor3Pos': [(-0.07, 0.02)], 'Distractor4Pos': [(0.01, -0.01)], 'Distractor5Pos': [(-0.06, -0.08)], 'Distractor6Pos': [(-0.03, -0.03)], 'Distractor7Pos': [(-0.09, 0.09)], 'CorrResp': 's'},
      {'TargetShape': 'triangle', 'TargetVertices': [[-0.05, -0.05], [0.05, -0.05], [0, 0.05]], 'TargetColour': 'green', 'DistractorShape': 'square', 'DistractorVertices': [[-0.05, -0.05], [0.05, -0.05], [0.05, 0.05], [-0.05, 0.05]], 'DistractorColour': 'green', 'TargetPosition': (0, -0.07), 'DistractorPosition': [(-0.7, 0.08)], 'Distractor2Pos': [(-0.09, -0.09)], 'Distractor3Pos': [(0.04, -0.04)], 'Distractor4Pos': [(0.06, 0.05)], 'Distractor5Pos': [(-0.01, 0.01)], 'Distractor6Pos': [(-0.06, 0.06)], 'Distractor7Pos': [(-0.03, -0.03)], 'CorrResp': 't'},
      {'TargetShape': 'square', 'TargetVertices': [[-0.05, -0.05], [0.05, -0.05], [0.05, 0.05], [-0.05, 0.05]], 'TargetColour': 'red', 'DistractorShape': 'triangle', 'DistractorVertices': [[-0.05, -0.05], [0.05, -0.05], [0, 0.05]], 'DistractorColour': 'red', 'TargetPosition': (0.07, 0.07), 'DistractorPosition': [(0.08, 0.08)], 'Distractor2Pos': [(-0.04, 0)], 'Distractor3Pos': [(0.08, -0.02)], 'Distractor4Pos': [(-0.06, -0.06)], 'Distractor5Pos': [(-0.01, -0.01)], 'Distractor6Pos': [(0.03, -0.03)], 'Distractor7Pos': [(-0.09, 0.09)], 'CorrResp': 's'}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
    Routine Trial2
  LoopTerminator trials_3
